<?xml version='1.0'?>
<model cmeta:id="Humphrey" name="Humphrey" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <!-- Global units -->
    <units name="strain">
        <unit units="dimensionless"/>
    </units>
    <units name="stress">
        <unit units="dimensionless"/>
    </units>
    <units name="pole">
        <unit units="dimensionless"/>
    </units>
    <units name="sqrtStrainCube">
        <unit units="dimensionless"/>
    </units>
    <units name="curvature">
        <unit units="dimensionless"/>
    </units>
    <units name="scale">
        <unit units="dimensionless"/>
    </units>
    <component cmeta:id="interface" name="interface">
        <!-- Variables we expect to be set/controlled externally -->
        <variable initial_value="1.3" name="C11" private_interface="out" units="strain"/>
        <variable initial_value="0.8" name="C22" private_interface="out" units="strain"/>
        <variable initial_value="1.1" name="C33" private_interface="out" units="strain"/>
        <variable initial_value="0.2" name="C12" private_interface="out" units="strain"/>
        <variable initial_value="0.1" name="C13" private_interface="out" units="strain"/>
        <variable initial_value="-0.1" name="C23" private_interface="out" units="strain"/>
        <variable initial_value="11" name="c1" private_interface="out" units="scale"/>
        <variable initial_value="0.49" name="c2" private_interface="out" units="scale"/>
        <variable initial_value="0.01" name="c3" private_interface="out" units="scale"/>
        <!-- Variables we want to make available externally -->
        <variable initial_value="0" name="Tdev11" private_interface="in" public_interface="out" units="stress"/>
        <variable initial_value="0" name="Tdev22" private_interface="in" public_interface="out" units="stress"/>
        <variable initial_value="0" name="Tdev33" private_interface="in" public_interface="out" units="stress"/>
        <variable initial_value="0" name="Tdev12" private_interface="in" public_interface="out" units="stress"/>
        <variable initial_value="0" name="Tdev13" private_interface="in" public_interface="out" units="stress"/>
        <variable initial_value="0" name="Tdev23" private_interface="in" public_interface="out" units="stress"/>
    </component>
    <!--interface-->
    <component cmeta:id="equations" name="equations">
        <!-- Inputs -->
        <variable name="C11" public_interface="in" units="strain"/>
        <variable name="C22" public_interface="in" units="strain"/>
        <variable name="C33" public_interface="in" units="strain"/>
        <variable name="C12" public_interface="in" units="strain"/>
        <variable name="C13" public_interface="in" units="strain"/>
        <variable name="C23" public_interface="in" units="strain"/>
        <variable name="c1" public_interface="in" units="strain"/>
        <variable name="c2" public_interface="in" units="strain"/>
        <!-- Outputs computed here -->
        <variable name="Tdev11" public_interface="out" units="stress"/>
        <variable name="Tdev22" public_interface="out" units="stress"/>
        <variable name="Tdev33" public_interface="out" units="stress"/>
        <variable name="Tdev12" public_interface="out" units="stress"/>
        <variable name="Tdev13" public_interface="out" units="stress"/>
        <variable name="Tdev23" public_interface="out" units="stress"/>
        <variable name="J" units="sqrtStrainCube"/>
        <variable name="trC" units="strain"/>
        <variable name="Ibar" units="scale"/>
        <variable name="K11" units="strain"/>
        <variable name="K22" units="strain"/>
        <variable name="K33" units="strain"/>
        <variable name="K12" units="strain"/>
        <variable name="K13" units="strain"/>
        <variable name="K23" units="strain"/>
        <!-- Temporary variables   the deleted term +2{dimensionless}*(J-1{dimensionless})*K23/(0.01{dimensionless}*J)-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>trC</ci>
                <apply>
                    <plus/>
                    <ci>C11</ci>
                    <ci>C22</ci>
                    <ci>C33</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J</ci>
                <apply>
                    <root/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <apply>
                                    <plus/>
                                    <apply>
                                        <times/>
                                        <ci>C11</ci>
                                        <ci>C22</ci>
                                        <ci>C33</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>C12</ci>
                                        <ci>C23</ci>
                                        <ci>C13</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>C13</ci>
                                        <ci>C12</ci>
                                        <ci>C23</ci>
                                    </apply>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>C13</ci>
                                    <ci>C22</ci>
                                    <ci>C13</ci>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>C11</ci>
                                <ci>C23</ci>
                                <ci>C23</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>C12</ci>
                            <ci>C12</ci>
                            <ci>C33</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Ibar</ci>
                <apply>
                    <times/>
                    <ci>trC</ci>
                    <apply>
                        <power/>
                        <ci>J</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K11</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>C22</ci>
                        <ci>C33</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>C23</ci>
                        <ci>C23</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K12</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>C23</ci>
                        <ci>C13</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>C12</ci>
                        <ci>C33</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K13</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>C12</ci>
                        <ci>C23</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>C22</ci>
                        <ci>C13</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K22</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>C11</ci>
                        <ci>C33</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>C13</ci>
                        <ci>C13</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K23</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>C12</ci>
                        <ci>C13</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>C11</ci>
                        <ci>C23</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K33</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>C11</ci>
                        <ci>C22</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>C12</ci>
                        <ci>C12</ci>
                    </apply>
                </apply>
            </apply>
            <apply id="Tdev11_calculation">
                <eq/>
                <ci>Tdev11</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>c1</ci>
                    <apply>
                        <power/>
                        <ci>J</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>trC</ci>
                                <ci>K11</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>J</ci>
                                <ci>J</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <exp/>
                        <apply>
                            <times/>
                            <ci>c2</ci>
                            <apply>
                                <minus/>
                                <ci>Ibar</ci>
                                <cn cellml:units="dimensionless">3</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply id="Tdev22_calculation">
                <eq/>
                <ci>Tdev22</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>c1</ci>
                    <apply>
                        <power/>
                        <ci>J</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>trC</ci>
                                <ci>K22</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>J</ci>
                                <ci>J</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <exp/>
                        <apply>
                            <times/>
                            <ci>c2</ci>
                            <apply>
                                <minus/>
                                <ci>Ibar</ci>
                                <cn cellml:units="dimensionless">3</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply id="Tdev33_calculation">
                <eq/>
                <ci>Tdev33</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>c1</ci>
                    <apply>
                        <power/>
                        <ci>J</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>trC</ci>
                                <ci>K33</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>J</ci>
                                <ci>J</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <exp/>
                        <apply>
                            <times/>
                            <ci>c2</ci>
                            <apply>
                                <minus/>
                                <ci>Ibar</ci>
                                <cn cellml:units="dimensionless">3</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply id="Tdev12_calculation">
                <eq/>
                <ci>Tdev12</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>c1</ci>
                    <apply>
                        <power/>
                        <ci>J</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">0</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>trC</ci>
                                <ci>K12</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>J</ci>
                                <ci>J</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <exp/>
                        <apply>
                            <times/>
                            <ci>c2</ci>
                            <apply>
                                <minus/>
                                <ci>Ibar</ci>
                                <cn cellml:units="dimensionless">3</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply id="Tdev13_calculation">
                <eq/>
                <ci>Tdev13</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>c1</ci>
                    <apply>
                        <power/>
                        <ci>J</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">0</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>trC</ci>
                                <ci>K13</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>J</ci>
                                <ci>J</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <exp/>
                        <apply>
                            <times/>
                            <ci>c2</ci>
                            <apply>
                                <minus/>
                                <ci>Ibar</ci>
                                <cn cellml:units="dimensionless">3</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply id="Tdev23_calculation">
                <eq/>
                <ci>Tdev23</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>c1</ci>
                    <apply>
                        <power/>
                        <ci>J</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">0</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>trC</ci>
                                <ci>K23</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>J</ci>
                                <ci>J</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <exp/>
                        <apply>
                            <times/>
                            <ci>c2</ci>
                            <apply>
                                <minus/>
                                <ci>Ibar</ci>
                                <cn cellml:units="dimensionless">3</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <!--membrane-->
    <connection>
        <map_components component_1="interface" component_2="equations"/>
        <map_variables variable_1="C11" variable_2="C11"/>
        <map_variables variable_1="C22" variable_2="C22"/>
        <map_variables variable_1="C33" variable_2="C33"/>
        <map_variables variable_1="C12" variable_2="C12"/>
        <map_variables variable_1="C13" variable_2="C13"/>
        <map_variables variable_1="C23" variable_2="C23"/>
        <map_variables variable_1="Tdev11" variable_2="Tdev11"/>
        <map_variables variable_1="Tdev22" variable_2="Tdev22"/>
        <map_variables variable_1="Tdev33" variable_2="Tdev33"/>
        <map_variables variable_1="Tdev12" variable_2="Tdev12"/>
        <map_variables variable_1="Tdev13" variable_2="Tdev13"/>
        <map_variables variable_1="Tdev23" variable_2="Tdev23"/>
        <map_variables variable_1="c1" variable_2="c1"/>
        <map_variables variable_1="c2" variable_2="c2"/>
    </connection>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="interface">
            <component_ref component="equations"/>
        </component_ref>
    </group>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <!-- metadata about the CellML document itself -->
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Nickerson</vCard:Family>
                    <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">David</vCard:Given>
                </vCard:N>
                <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">d.nickerson@auckland.ac.nz</rdf:value>
                    <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://imc.org/vCard/3.0#internet"/>
                </vCard:EMAIL>
                <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <vCard:Orgname xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The University of Auckland</vCard:Orgname>
                    <vCard:Orgunit xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The Bioengineering Institute</vCard:Orgunit>
                </vCard:ORG>
            </dc:creator>
            <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2003-11-28</dcterms:W3CDTF>
            </dcterms:created>
        </rdf:Description>
        <!-- description of the model -->
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#MooneyRivlin">
            <cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
          This is a CellML version of the Mooney-Rivlin constitutive material law,
          defining the relation between the eight independent strain components
          and the stress components. It is assumed that the strain components
          will be controlled externally by the application using this CellML
          model.
        </rdf:value>
            </cmeta:comment>
            <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#">
                <bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">pubmed_id</bqs:Pubmed_id>
                <bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
                        <rdf:Seq xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:parseType="Resource">
                                <bqs:Person xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                                    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                                        <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Master</vCard:Family>
                                        <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Andre</vCard:Given>
                                        <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">T</vCard:Other>
                                    </vCard:N>
                                </bqs:Person>
                            </rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:parseType="Resource">
                                <bqs:Person xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                                    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                                        <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Bob</vCard:Family>
                                        <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Billy</vCard:Given>
                                    </vCard:N>
                                </bqs:Person>
                            </rdf:li>
                        </rdf:Seq>
                    </dc:creator>
                    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
            What cool article to reference ??
          </dc:title>
                    <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                        <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">year</dcterms:W3CDTF>
                    </dcterms:issued>
                    <bqs:Journal xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">The Journal of Cool Stuff</dc:title>
                    </bqs:Journal>
                    <bqs:volume xmlns:bqs="http://www.cellml.org/bqs/1.0#">volume</bqs:volume>
                    <bqs:first_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">1</bqs:first_page>
                    <bqs:last_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">1000</bqs:last_page>
                </bqs:JournalArticle>
            </bqs:reference>
        </rdf:Description>
    </rdf:RDF>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#interface">
            <cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            We'll use this component as the "interface" to the model, all 
            other components are hidden via encapsulation in this component.
          </rdf:value>
            </cmeta:comment>
        </rdf:Description>
    </rdf:RDF>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#equations">
            <cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            In this simple model we only have one component, which holds the
            six equations.
          </rdf:value>
            </cmeta:comment>
        </rdf:Description>
    </rdf:RDF>
</model>
